PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[-1,-1,-1]
  expName = Criterion
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Routines
  Routine Instr_CR
    TextComponent Instr_CR_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        There will be four symbols showing on the screen, one at a time.
        Each of them maps onto one keys from (h,u,i,l).

        Your job is to figure out the map.

        Think before you press the key.
        The accuracy is the priority.

        The more mistaks you make, the longer this block will be.
    KeyboardComponent Instr_CR_press
      allowedKeys = 'h','u','i','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CR_enter_trial
    PolygonComponent circle_frame
      fillColor = $[-1,-1,-1]
      lineWidth = 10
      nVertices = 1000
      shape = regular polygon...
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent stim_image
      image [set every repeat] = $imStim
      interpolate = nearest
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent CR_key_press
      allowedKeys = 'h','u','i','l'
      correctAns = $CorrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if CR_key_press.keys == ['h']:
            feedback_color = [1.0,-1,-1]
            CR_feedback_duration = 1
        else:
            feedback_color = [0.1,0.5,0.3]
            CR_feedback_duration = 0.3
  Routine Cr_feedback
    PolygonComponent feedback_circle
      fillColor = $[-1,-1,-1]
      lineColor [set every repeat] = $[1,1,1]
      lineWidth = 10
      nVertices = 1000
      shape = regular polygon...
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CR_feedback_duration
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    ImageComponent feedback_image
      color [set every repeat] = $feedback_color
      image [set every repeat] = $imStim
      interpolate = nearest
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CR_feedback_duration
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  Routine CR_feedback_setup
    CodeComponent CR_feedback_setup_code
      Code Type = Auto->JS
Flow
  Routine Instr_CR
  LoopInitiator CR_trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Stim', 'a'), ('CorrResp', 'h'), ('imStim', 'media/danb.png')]),
      OrderedDict([('Stim', 'b'), ('CorrResp', 'u'), ('imStim', 'media/dbnb.png')]),
      OrderedDict([('Stim', 'c'), ('CorrResp', 'i'), ('imStim', 'media/dcnb.png')]),
      OrderedDict([('Stim', 'd'), ('CorrResp', 'l'), ('imStim', 'media/ddnb.png')]),
      OrderedDict([('Stim', 'e'), ('CorrResp', 'h'), ('imStim', 'media/denb.png')]),
      OrderedDict([('Stim', 'f'), ('CorrResp', 'u'), ('imStim', 'media/dfnb.png')]),
      OrderedDict([('Stim', 'g'), ('CorrResp', 'i'), ('imStim', 'media/dgnb.png')]),
      OrderedDict([('Stim', 'h'), ('CorrResp', 'l'), ('imStim', 'media/dhnb.png')])]
    Routine CR_enter_trial
    Routine Cr_feedback
  LoopTerminator CR_trials
